PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = psycopy demo
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent itemL
      text [set every repeat] = $left
      stopVal [duration (s)] = .250
      pos = (-0.1, 0)
      startVal [time (s)] = 0.5
      font [set every repeat] = Arial
      letterHeight = .1
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    KeyboardComponent key_response
      correctAns = $corAns
      storeCorrect = True
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys = '0', '1' ,'2'
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent fixation
      text = +
      stopVal [duration (s)] = .750
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent itemR
      text [set every repeat] = $right
      stopVal [duration (s)] = .250
      pos = (0.1, 0)
      startVal [time (s)] = 0.5
      font = Sloan
      letterHeight = 0.1
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    TextComponent text
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine end
    TextComponent thanks
      text = Thank-you
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent Instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Choose '0' if no real words
        Choose '1' if one real word
        Choose '2' if two real words
        Press any key to continue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'typeL': u'word', u'right': u'ship', u'corAns': 0L, u'TrialN': 1L, u'left': u'tour', u'TypeR': u'word'},
      {u'typeL': u'non word', u'right': u'#$%@', u'corAns': 1L, u'TrialN': 2L, u'left': u'#$%@', u'TypeR': u'non word'},
      {u'typeL': u'non word', u'right': u'hart', u'corAns': 2L, u'TrialN': 3L, u'left': u'#$%@', u'TypeR': u'word'},
      {u'typeL': u'non word', u'right': u'#$%@', u'corAns': 0L, u'TrialN': 4L, u'left': u'#$%@', u'TypeR': u'non word'}]
    Routine trial
  LoopTerminator trials
  Routine end
