PsychoPy2experiment version="1.84.2"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'session': u'01', u'participant': u''}
  expName = LDT_cedras
  Save excel file = True
  Units = norm
  Screen = 1
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Routines
  Routine trial
    TextComponent itemL
      color = White
      text [set every repeat] = $left
      stopVal [duration (s)] = .25
      pos = [-0.20, 0]
      startVal [time (s)] = 1
      font = courier
      letterHeight = 0.15
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1', '2', '3'
      startVal [time (s)] = 1
      store = first key
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    TextComponent itemR
      text [set every repeat] = $right
      stopVal [duration (s)] = 0.25
      pos = (0.20, 0)
      startVal [time (s)] = 1.0
      font = courier
      letterHeight = 0.15
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    TextComponent fixation
      text = +
      stopVal [duration (s)] = 0.75
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    TextComponent blank
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    cedrusButtonBoxComponent buttonBox
      correctAns = $corrAns
      storeCorrect = True
      deviceNumber = 0
      useBoxTimer = False
      forceEndRoutine = True
      discard previous = True
      allowedKeys = '1' '2' '3'
      startVal [time (s)] = 1
      store = first key
      syncScreenRefresh = True
  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      font = Courier
      letterHeight = 0.1
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      text:
        OK. Ready for the real thing?

        Choose '1' if no real words
        Choose '2' if one real word
        Choose '3' if two real words
        Press any key to continue
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.2
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      text:
        This is the end of the experiment.

        Thanks!
  Routine instructPractice
    TextComponent instr1
      startVal [time (s)] = 0.0
      font = Courier
      letterHeight = 0.1
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      text:
        Ready for a practice
        You will see a fixation cross with two items either side
        Choose '1' if no real words
        Choose '2' if one real word
        Choose '3' if two real words
        Press any key to continue
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = conditions1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'typeL': u'word', u'right': u'ship', u'TrialN': 1L, u'corrAns': 0L, u'left': u'tour', u'TypeR': u'word'},
      {u'typeL': u'non word', u'right': u'#$%@', u'TrialN': 2L, u'corrAns': 1L, u'left': u'#$%@', u'TypeR': u'non word'},
      {u'typeL': u'non word', u'right': u'hart', u'TrialN': 3L, u'corrAns': 2L, u'left': u'#$%@', u'TypeR': u'word'},
      {u'typeL': u'non word', u'right': u'#$%@', u'TrialN': 4L, u'corrAns': 0L, u'left': u'#$%@', u'TypeR': u'non word'}]
    Routine trial
  LoopTerminator practice
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions4.xlsx
    loopType = sequential
    nReps = 1
    endPoints = [1, 2]
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    conditions:
      [{u'left_word': u'list', u'right_word': u'grid', u'Trial_Number_R': 165L, u'Trial_number_L': 229L, u'CorrAns': 3L, u'order': 0.593175365937935, u'condition': u'two words'},
      {u'left_word': u'soak', u'right_word': u'tour', u'Trial_Number_R': 406L, u'Trial_number_L': 371L, u'CorrAns': 3L, u'order': 0.585693971760242, u'condition': u'two words'},
      {u'left_word': u'gran', u'right_word': u'dear', u'Trial_Number_R': 83L, u'Trial_number_L': 162L, u'CorrAns': 3L, u'order': 0.04018569352186285, u'condition': u'two words'},
      {u'left_word': u'visa', u'right_word': u'****', u'Trial_Number_R': u'NA', u'Trial_number_L': 421L, u'CorrAns': 2L, u'order': 0.05981256108710775, u'condition': u'one word'},
      {u'left_word': u'site', u'right_word': u'****', u'Trial_Number_R': u'NA', u'Trial_number_L': 362L, u'CorrAns': 2L, u'order': 0.5216432850714432, u'condition': u'one word'},
      {u'left_word': u'****', u'right_word': u'****', u'Trial_Number_R': u'NA', u'Trial_number_L': u'NA', u'CorrAns': 1L, u'order': 0.4537945409585119, u'condition': u'zero words'},
      {u'left_word': u'song', u'right_word': u'wave', u'Trial_Number_R': 429L, u'Trial_number_L': 375L, u'CorrAns': 3L, u'order': 0.6636805785874974, u'condition': u'two words'},
      {u'left_word': u'whip', u'right_word': u'****', u'Trial_Number_R': u'NA', u'Trial_number_L': 434L, u'CorrAns': 2L, u'order': 0.6761481183496012, u'condition': u'one word'}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
    Routine trial
  LoopTerminator trials
  Routine thanks
